<?xml version='1.0' encoding='UTF-8'?>
<model name="my_model" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
    <!-- Coverage-->
    <component name="my_component">
        <variable name="eqnEqEq" units="dimensionless"/>
        <variable name="eqnNeq" units="dimensionless"/>
        <variable name="eqnLt" units="dimensionless"/>
        <variable name="eqnLeq" units="dimensionless"/>
        <variable name="eqnGt" units="dimensionless"/>
        <variable name="eqnGeq" units="dimensionless"/>
        <variable name="eqnPlus" units="dimensionless"/>
        <variable name="eqnMultiplePlus" units="dimensionless"/>
        <variable name="eqnMinus" units="dimensionless"/>
        <variable name="eqnMultipleMinus" units="dimensionless"/>
        <variable name="eqnTimes" units="dimensionless"/>
        <variable name="eqnMultipleTimes" units="dimensionless"/>
        <variable name="eqnDivide" units="dimensionless"/>
        <variable name="eqnMultipleDivide" units="dimensionless"/>
        <variable name="eqnAbs" units="dimensionless"/>
        <variable name="eqnExp" units="dimensionless"/>
        <variable name="eqnLn" units="dimensionless"/>
        <variable name="eqnCeil" units="dimensionless"/>
        <variable name="eqnFloor" units="dimensionless"/>
        <variable name="eqnFact" units="dimensionless"/>
        <variable name="eqnAnd" units="dimensionless"/>
        <variable name="eqnMultipleAnd" units="dimensionless"/>
        <variable name="eqnOr" units="dimensionless"/>
        <variable name="eqnMultipleOr" units="dimensionless"/>
        <variable name="eqnXor" units="dimensionless"/>
        <variable name="eqnMultipleXor" units="dimensionless"/>
        <variable name="eqnNot" units="dimensionless"/>
        <variable name="eqnSin" units="dimensionless"/>
        <variable name="eqnCos" units="dimensionless"/>
        <variable name="eqnTan" units="dimensionless"/>
        <variable name="eqnSec" units="dimensionless"/>
        <variable name="eqnCsc" units="dimensionless"/>
        <variable name="eqnCot" units="dimensionless"/>
        <variable name="eqnSinh" units="dimensionless"/>
        <variable name="eqnCosh" units="dimensionless"/>
        <variable name="eqnTanh" units="dimensionless"/>
        <variable name="eqnSech" units="dimensionless"/>
        <variable name="eqnCsch" units="dimensionless"/>
        <variable name="eqnCoth" units="dimensionless"/>
        <variable name="eqnAsin" units="dimensionless"/>
        <variable name="eqnAcos" units="dimensionless"/>
        <variable name="eqnAtan" units="dimensionless"/>
        <variable name="eqnAsec" units="dimensionless"/>
        <variable name="eqnAcsc" units="dimensionless"/>
        <variable name="eqnAcot" units="dimensionless"/>
        <variable name="eqnAsinh" units="dimensionless"/>
        <variable name="eqnAcosh" units="dimensionless"/>
        <variable name="eqnAtanh" units="dimensionless"/>
        <variable name="eqnAsech" units="dimensionless"/>
        <variable name="eqnAcsch" units="dimensionless"/>
        <variable name="eqnAcoth" units="dimensionless"/>
        <variable name="eqnCn" units="dimensionless"/>
        <variable name="eqnCi" units="dimensionless"/>
        <variable name="eqnTrue" units="dimensionless"/>
        <variable name="eqnFalse" units="dimensionless"/>
        <variable name="eqnNan" units="dimensionless"/>
        <variable name="eqnPi" units="dimensionless"/>
        <variable name="eqnInf" units="dimensionless"/>
        <variable name="eqnE" units="dimensionless"/>
        <variable initial_value="1" name="m" units="dimensionless"/>
        <variable initial_value="2" name="n" units="dimensionless"/>
        <variable initial_value="3" name="o" units="dimensionless"/>
        <variable initial_value="4" name="p" units="dimensionless"/>
        <variable initial_value="5" name="q" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>eqnEqEq</ci>
                <apply>
                    <eq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNeq</ci>
                <apply>
                    <neq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLt</ci>
                <apply>
                    <lt/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLeq</ci>
                <apply>
                    <leq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnGt</ci>
                <apply>
                    <gt/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnGeq</ci>
                <apply>
                    <geq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPlus</ci>
                <apply>
                    <plus/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMultiplePlus</ci>
                <apply>
                    <plus/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinus</ci>
                <apply>
                    <minus/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMultipleMinus</ci>
                <apply>
                    <minus/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimes</ci>
                <apply>
                    <times/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMultipleTimes</ci>
                <apply>
                    <times/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivide</ci>
                <apply>
                    <divide/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMultipleDivide</ci>
                <apply>
                    <divide/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAbs</ci>
                <apply>
                    <abs/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnExp</ci>
                <apply>
                    <exp/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLn</ci>
                <apply>
                    <ln/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCeil</ci>
                <apply>
                    <ceiling/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnFloor</ci>
                <apply>
                    <floor/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnFact</ci>
                <apply>
                    <factorial/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAnd</ci>
                <apply>
                    <and/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMultipleAnd</ci>
                <apply>
                    <and/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOr</ci>
                <apply>
                    <or/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMultipleOr</ci>
                <apply>
                    <or/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXor</ci>
                <apply>
                    <xor/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMultipleXor</ci>
                <apply>
                    <xor/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNot</ci>
                <apply>
                    <not/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSin</ci>
                <apply>
                    <sin/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCos</ci>
                <apply>
                    <cos/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTan</ci>
                <apply>
                    <tan/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSec</ci>
                <apply>
                    <sec/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCsc</ci>
                <apply>
                    <csc/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCot</ci>
                <apply>
                    <cot/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSinh</ci>
                <apply>
                    <sinh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCosh</ci>
                <apply>
                    <cosh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTanh</ci>
                <apply>
                    <tanh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSech</ci>
                <apply>
                    <sech/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCsch</ci>
                <apply>
                    <csch/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCoth</ci>
                <apply>
                    <coth/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAsin</ci>
                <apply>
                    <arcsin/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAcos</ci>
                <apply>
                    <arccos/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAtan</ci>
                <apply>
                    <arctan/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAsec</ci>
                <apply>
                    <arcsec/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAcsc</ci>
                <apply>
                    <arccsc/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAcot</ci>
                <apply>
                    <arccot/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAsinh</ci>
                <apply>
                    <arcsinh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAcosh</ci>
                <apply>
                    <arccosh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAtanh</ci>
                <apply>
                    <arctanh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAsech</ci>
                <apply>
                    <arcsech/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAcsch</ci>
                <apply>
                    <arccsch/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAcoth</ci>
                <apply>
                    <arccoth/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCn</ci>
                <cn cellml:units="dimensionless">3</cn>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCi</ci>
                <ci>m</ci>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTrue</ci>
                <true/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnFalse</ci>
                <false/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNan</ci>
                <notanumber/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPi</ci>
                <pi/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnInf</ci>
                <infinity/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnE</ci>
                <exponentiale/>
            </apply>
        </math>
    </component>
</model>
